// ********** Image Types

(FixedInternalImagePixelType "float")
(FixedImageDimension 2)
(MovingInternalImagePixelType "float")
(MovingImageDimension 2)


// ********** Components

(Registration "MultiResolutionRegistration")
(Interpolator "BSplineInterpolator")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(FixedImagePyramid "FixedRecursiveImagePyramid")
(MovingImagePyramid "MovingRecursiveImagePyramid")
(Metric "AdvancedMattesMutualInformation")
(Optimizer "AdaptiveStochasticGradientDescent")
//(Transform "EulerTransform") 
(Transform "AffineTransform")


// ********** Pyramid

// Total number of resolutions
(NumberOfResolutions 3)
//(ImagePyramidSchedule 16 16 8 8 8 4 4 4 2 2 2 1 1 1 1)


// ********** Transform

(FinalGridSpacingInPhysicalUnits 10.0 10.0)
(GridSpacingSchedule 2.0 1.0)
//(AutomaticScalesEstimation "true")
//(AutomaticTransformInitialization "true")
(HowToCombineTransforms "Compose")


// ********** Optimizer

// Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 4000)

(AutomaticParameterEstimation "true")
(UseAdaptiveStepSizes "true")


// ********** Metric

(NumberOfHistogramBins 32)
(FixedLimitRangeRatio 0.0)
(MovingLimitRangeRatio 0.0)
(FixedKernelBSplineOrder 1)
(MovingKernelBSplineOrder 3)
(UseFastAndLowMemoryVersion "true")


// ********** Several

(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "false")
(WriteResultImageAfterEachResolution "false")
(WritePyramidImagesAfterEachResolution "false")
(WriteResultImage "false")
(ResultImageFormat "tiff")
(ResultImagePixelType "unsigned short")
(ShowExactMetricValue "false")
(ErodeMask "false")
(UseDirectionCosines "true")


// ********** ImageSampler

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "RandomCoordinate")
(NumberOfSpatialSamples 2000)
(NewSamplesEveryIteration "true")
(UseRandomSampleRegion "false")
(SampleRegionSize 50.0 50.0 50.0)
(MaximumNumberOfSamplingAttempts 50)


// ********** Interpolator and Resampler

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 1)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)